;Pulse Program Code for Bruker:

;On the interference of J(HH) modulation in HSQMBC-IPAP and HMBC-IPAP experiments 
;by Josep Saurí and Teodor Parella
;Magn. Reson. Chem. 2013. DOI: 10.1002/mrc.3977

;josep_hsqmbcipap
;Define cnst24
;cnst24= 1: HSQMBC 
;cnst24= 0: HSQMBC-COSY

;Topspin2.1

#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>


"p2=p1*2"
"d0=3u"
"d20=p3"
"d11=30m"
"d12=20u"
"d13=50u"
"d2=1s/(cnst4*2)"
"d14=(1s/(cnst13*4))-d12-50u-p16-d16-p14/2"  ;biggest coupling
"d15=(1s/(cnst14*4))-d12-50u-p16-d16-p14/2"  ;smallest coupling
"in14=(d15-d14)/((td1/2)-1)"  ; IPAP version needs the division by two since it is interleaved
"l0=1"

"in0=inf1/2"

;"DELTA1=d14-p16-50u-4u"
"DELTA=p2+d0*2+50u+p16+d16"
;"DELTA3=d14-50u-p16-d16-50u-p16-d16-p14/2"
;"DELTA4=d14-50u-p16-d16-p14/2"
"DELTA6=50u+p16+d16"
"acqt0=0"

1 ze
2 d1
  4u pl1:f1 pl2:f2
  (p1 ph1)

  50u UNBLKGRAD
  p16:gp5
  d16
 
  d12 pl0:f2
  d14
 
  (p1 ph1)
  d2
 (center (p2 ph1) (p14:sp3 ph1):f2 )
  d2
  (p1 ph7)

  d14
  d12 pl2:f2
  50u 
  p16:gp5
  d16

  (p1 ph2) 
  4u
  p16:gp3
  d16
  (p3 ph3):f2
  d0 
  (p2 ph5)
  d0
  50u 
  p16:gp1*EA
  d16 pl0:f2
  (p24:sp7 ph4):f2
  DELTA pl2:f2
  (p3 ph4):f2
  50u
  p16:gp4
  d16

  	if "l0 %2 ==1"
	{
	(p1 ph2):f1
	}
	else
	{
	(p1 ph1):f1
	}

  50u
  p16:gp5
  d16
 
   d12 pl0:f2
   d14

	if "l0 %2 ==1"
	{
	(center (p2 ph1) (p14:sp3 ph1):f2 )
	}
	else
	{
	(p2 ph1)
	}
  
  d14
  d12 pl2:f2
  50u 
  p16:gp5
  d16

if "cnst24==0"
	{
	(p1 ph2):f1
	}
	else
	{
	
	}


  DELTA6
  p2 ph1
  50u
  p16:gp2
  d16 
  4u BLKGRAD

if "l0 %2 ==1"
	{
	(p3 ph1):f2
	}
	else
	{
	d20
	}
  
  go=2 ph31 
  d1  mc #0 to 2
     F1I(iu0, 2) 
     F1EA(igrad EA, id0 & id14 & ip3*2 & ip6*2 & ip31*2)
exit
   

ph1=0 
ph2=1
ph3=0 2
ph4=0 
ph5=0 
ph6=0
ph7=2
ph22=3
ph24=1
ph31=0 2
  

;pl1 : f1 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse 180 degree (adiabatic)
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion (adiabatic)
;p16: homospoil/gradient pulse                         [1 msec]
;p21: f3 channel -  90 degree high power pulse
;p22: f3 channel - 180 degree high power pulse
;p28: f1 channel - trim pulse                          [1 msec]
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d11: delay for disk I/O                               [30 msec]
;d13: short delay                                      [4 usec]
;d16: delay for homospoil/gradient recovery
;cnst4: = J(YH)
;cnst13: big long range
;cnst14: small long range
;cnst25: = 0 IP , 1 AP
;cnst24: = 0 HSQMBC-COSY, 1 HSQMBC
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 1 * n
;DS: >= 16
;td1: number of experiments
;FnMODE: echo-antiecho
;use gradient ratio:	gp 1 : gp 2 : gp 3 : gp 4 : gp 5
;			  80 : 20.1 : 33 : 50 : 17 for C-13
;			  80 :  8.1 : 33 : 50 : 17 for N-15

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1%
;gpz3: 33%
;gpz4: 50%
;gpz5: 17%

;use gradient files:   
;gpnam1: SINE.100
;gpnam2: SINE.100
;gpnam3: SINE.100
;gpnam4: SINE.100
;gpnam5: SINE.100

