# 1 "C:/Bruker/TopSpin3.6.2/exp/stan/nmr/lists/pp/selgpse"
;selgpse
;avance-version (12/01/11)
;1D spin echo with gradients
;   using selective refocussing with a shaped pulse
;
;$CLASS=HighRes
;$DIM=1D
;$TYPE=
;$SUBTYPE=
;$COMMENT=


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"spoff2=bf1*(cnst21/1000000)-o1"


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; dimension 1D; AQ_mode 
define delay MCWRK
define delay MCREST
"MCREST = 30m - 30m"
"MCWRK = 0.333333*30m"

    dccorr
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1 ze
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2 MCWRK  * 2
LBLF0, MCWRK
  MCREST
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  20u pl1:f1 setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
  d1
  50u setnmr3|0 setnmr0|34|32|33 ctrlgrad 0
  p1 ph1
  p16:gp1
  d16 pl0:f1
  p12:sp2:f1 ph2:r
  p16:gp1
  d16
  go=2 ph31
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  MCWRK wr #0
  MCWRK zd
  lo to LBLF0 times td0

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  20u setnmr3^0 setnmr0^34^32^33 ctrlgrad 7
exit


ph1=0 0 3 3 2 2 1 1
ph2=1 3
ph31=0 0 1 1 2 2 3 3
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;pl0 : 0W
;pl1 : f1 channel - power level for pulse (default)
;sp2: f1 channel - shaped pulse
;p1 : f1 channel -  90 degree high power pulse
;p12: f1 channel - 180 degree shaped pulse
;p16: homospoil/gradient pulse                            [1 msec]
;d1 : relaxation delay; 1-5 * T1
;d16: delay for homospoil/gradient recovery
;cnst21: chemical shift for selective pulse (offset, in ppm)
;ns: 2 * n, total number of scans: NS * TD0
;ds: 4


;phcor 2 : phasedifference between power levels sp1 and pl1
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;choose p12 according to desired selectivity
;the flip-angle is determined by the amplitude
;set O1 on resonance on the multiplet to be excited or use spoffs


;use gradient ratio:    gp 1
;                         15
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;for z-only gradients:
;gpz1: 15%

;use gradient files:   
;gpnam1: SMSQ10.100

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;$Id: selgpse,v 1.18 2012/01/31 17:49:28 ber Exp $
