;Perfect-1JCH-HSQC
;Tested in TS3.1

#include <Avance.incl>
#include <Grad.incl>
#include <Delay.incl>
#include <De.incl>

;deactive ps if not homodecoupling during acquisition is performed
#define ps
define loopcounter count

"d19=dw*l12"
"DELTA7=d19/2" 

"p2=p1*2"
"d0=3u"
"d2=1s/(cnst2*2)"
"d20=d2-larger(p2,p14)/2"
"d4=1s/(cnst2*4)"

"in0=inf1/2"

"DELTA=p16+d16+p2+d13*2-4u"
"DELTA2=d4-p14/2-4u"
"DELTA4=d4-p14/2-4u-p16-d16"
"DELTA5=d2-larger(p2,p14)/2"

"count=(aq/d19)-1"
"acqt0=0"
baseopt_echo

dwellmode explicit


1 ze
2 d1 do:f2
  d12 pl1:f1
3 (p1 ph1)
  
  d0
  p1 ph1
  DELTA5 pl0:f2
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  DELTA5 pl2:f2
  p1 ph1
  (p4 ph1):f2
  d0 
  p1 ph2 
  d0
  p1 ph1
  DELTA5 pl0:f2
  (center (p2 ph1) (p14:sp3 ph6):f2 )
  DELTA5 pl2:f2
  p1 ph1
  d0 

  (center (p1 ph2) (p3 ph3):f2 )
  d13 UNBLKGRAD
  (p2 ph1)
  d13
  p16:gp1*EA
  d16 pl0:f2
  (p24:sp7 ph4):f2
  4u
  DELTA pl2:f2
  (center (p1 ph1) (p3 ph4):f2 )
  DELTA2 pl0:f2
  4u
  (center (p2 ph1) (p14:sp3 ph1):f2 )
  4u
  DELTA4
  p16:gp2
  d16 pl12:f2
  d12 BLKGRAD 

#ifdef ps
4 ACQ_START(ph30,ph31) ;takes de

;initial half chunk
  10u pl12:f2
   10u cpd2:f2
  0.05u DWL_CLK_ON
  0.1u REC_UNBLK
  DELTA7
  0.1u REC_BLK
  0.05u DWL_CLK_OFF
   10u do:f2
   10u 

(p1 ph1)
d20 pl0:f2
(center (p2 ph2) (p14:sp3 ph1):f2 )
d20 pl2:f2
(p1 ph7)
160u
(p2 ph1)

;looped chunks
5  10u pl12:f2
   10u cpd2:f2

    0.05u DWL_CLK_ON
  0.1u REC_UNBLK
  d19
  0.1u REC_BLK
  0.05u DWL_CLK_OFF
   10u do:f2
   10u 

(p1 ph1)
d20 pl0:f2
(center (p2 ph2) (p14:sp3 ph1):f2 )
d20 pl1:f1 pl2:f2
(p1 ph7)
160u
(p2 ph1)
lo to 5 times count

  10u pl12:f2
   10u cpd2:f2

    0.05u DWL_CLK_ON
  0.1u REC_UNBLK
  DELTA7
  0.1u REC_BLK
  0.05u DWL_CLK_OFF 
   10u do:f2
   10u 
50u 
    rcyc=2   

#else
d12 pl12:f2
go=2 ph31 cpd2:f2
#endif  
 
  d1 do:f2 mc #0 to 2 
     F1EA(calgrad(EA), caldel(d0, +in0))
exit
   
ph1=0 
ph2=1
ph3=0 2
ph4=0 
ph6=0
ph7=2

ph15=1 
ph16=2 
ph17=3 

ph25=2
ph26=3
ph27=0

ph30=0
ph31=0 2 
 

;pl0 : 120dB
;pl1 : f1 channel - power level for pulse (default)
;pl2 : f2 channel - power level for pulse (default)
;sp3: f2 channel - shaped pulse 180 degree
;spnam3: Crp60,0.5,20.1
;sp7: f2 channel - shaped pulse (180degree refocusing)
;spnam7: Crp60comp.4
;p1 : f1 channel -  90 degree high power pulse
;p2 : f1 channel - 180 degree high power pulse
;p3 : f2 channel -  90 degree high power pulse
;p14: f2 channel - 180 degree shaped pulse for inversion
;     = 500usec for Crp60,0.5,20.1
;p16: homospoil/gradient pulse                         [1 msec]
;p24: f2 channel - 180 degree shaped pulse for refocusing
;     = 2msec for Crp60comp.4
;d0 : incremented delay (2D)                           [3 usec]
;d1 : relaxation delay; 1-5 * T1
;d2 : 1/(2J(XH))
;d4 : 1/(4J(XH))
;d16: delay for homospoil/gradient recovery
;cnst2: = J(XH)
;cnst17: = -0.5 for Crp60comp.4
;in0: 1/(2 * SW(X)) = DW(X)
;nd0: 2
;NS: 2 * n
;DS: >= 4
;td1: number of experiments
;FnMODE: echo-antiecho

;use gradient ratio:	gp 1 : gp 2
;			  80 : 20.1   for C-13

;for z-only gradients:
;gpz1: 80%
;gpz2: 20.1% for C-13

;use gradient files:   
;gpnam1: SINE.100
;gpnam2: SINE.100
